WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindVrForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindVrForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.Rig.AindVrForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindVrForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindVrForagingDataSchema.TaskLogic.AindVrForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=VrForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Fullscreen
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #9
            SubscribeSubject WorldContrast => #10
            #9, #10 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Brightness)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpTreadmill)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=Extensions\HarpTreadmill.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment) => #12
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #15
        #12, #15 -> SubscribeWhen

SubscribeSubject HarpTreadmillEvents
-> BehaviorSubject HarpTimestampSource

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
    -> FloatProperty(Value=0)
    -> Take(Count=1)
    -> AsyncSubject SigmaZ

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    Annotation(Text="The distance used to determine whether a segment should be disposed.") => #23
    ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #24
    #23, #24 -> FloatProperty(Value=20)
    -> Take(Count=1)
    -> AsyncSubject DisposingTreshold

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> GroupWorkflow GenerateRootLoggingPath
        ExternalizedMapping(Value(DisplayName=RootFolder))
        -> StringProperty(Value="")
        -> AllenNeuralDynamics.Core.StripDirectoryPath => #2
        ExternalizedMapping(Value(DisplayName=SessionName))
        -> StringProperty
        -> AllenNeuralDynamics.Core.StripDirectoryPath => #5
        #2, #5 -> Zip
        -> Format(Format={0}/{1}, Selector="Item1,Item2")
        -> Take(Count=1) => #8
        ExternalizedMapping(Name(DisplayName=SubjectName)) => #9
        #8, #9 -> AsyncSubject LoggingRootPath => #10
        #10, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(Item1 as Root, Item2 as SessionPath)
        -> WorkflowOutput
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AindVrForagingDataSchema.TaskLogic.VirtualSite> ActiveSite
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    BooleanProperty(Value=false)
    -> Take(Count=1) => #8
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #11
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #14
    #8, #11, #14 -> Merge
    -> BehaviorSubject ExperimentState

Annotation(Text="")
-> GroupWorkflow OperationControl
    GroupWorkflow PositionControl => #0
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.VelocityThreshold)
        -> BehaviorSubject StopVelocityThreshold

        SubscribeSubject StopVelocityThreshold
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=StopVelocityTreshold)
        -> MulticastSubject SoftwareEvent

        GroupWorkflow InitialPosition => #7
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=OperationControl)
            -> MemberSelector(Selector=PositionControl.InitialPosition)
            -> MemberSelector(Selector=Z) => #3
            -> DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject EncoderSample
        -> MemberSelector(Selector="Value.Displacement,Seconds")
        -> Bonsai.Harp.CreateTimestamped => #10
        #7, #10 -> Concat => #11
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> InputMapping(Z(Selector=it)) => #14
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.PositionControl.InitialPosition)
        -> PropertyMapping(X(Selector=X), Y(Selector=Y)) => #17
        #14, #17 -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=-1) => #18
        #11 -> MemberSelector(Selector=Seconds) => #19
        #18, #19 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject CurrentPosition

        SubscribeSubject EncoderSample => #24
        -> MemberSelector(Selector=Value)
        -> MemberSelector(Selector=InstantVelocity) => #26
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=PositionControl.FrequencyFilterCutoff)
        -> PropertyMapping(Cutoff1) => #30
        SubscribeSubject TreadmillSamplingRate
        -> PropertyMapping(SampleRate) => #32
        #26, #30, #32 -> Bonsai.Dsp.FrequencyFilter(SampleRate=250, Cutoff1=5, Cutoff2=0, KernelLength=60, FilterType=LowPass)
        -> PublishSubject FilteredCurrentVelocity => #34
        SubscribeSubject StopVelocityThreshold
        -> PropertyMapping(Value) => #36
        #34, #36 -> LessThan(Operand=DoubleProperty(Value=10))
        -> DistinctUntilChanged => #38
        #24 -> MemberSelector(Selector=Seconds) => #39
        #38, #39 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Shaders.SampleOnUpdateFrame
        -> BehaviorSubject IsStopped

        SubscribeSubject CurrentPosition
        -> MemberSelector(Selector=Value) => #45
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-100000)
        -> Take(Count=1) => #47
        #45, #47 -> Scan => #48
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #49
        #48, #49 -> BehaviorSubject MaxPosition
    SubscribeSubject StartExperiment => #1
    #0, #1 -> SubscribeWhen

    GroupWorkflow Lickometer
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #5
        #5, #1 -> WithLatestFrom
        -> PublishSubject LickometerState
        -> Condition IsLickOnset
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> BehaviorSubject LickometerUntriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> BehaviorSubject LickometerTriggerThreshold

        SubscribeSubject HarpLickometerEvents
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=Off, Heartbeat=Enabled)
        -> Take(Count=1)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerTrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerTriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0TriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

        BehaviorSubject<System.Boolean> IncrementLickometerUntrigger
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1 : -1"
          Expression: it ? 1 : -1
        -> SelectMany Offset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Offset

            SubscribeSubject LickometerUntriggerThreshold
            -> Take(Count=1) => #4
            SubscribeSubject Offset => #5
            #4, #5 -> CombineLatest
            -> Add
            -> WorkflowOutput
        -> AllenNeuralDynamics.LicketySplit.Format(MessageType=Write, Register=AllenNeuralDynamics.LicketySplit.Channel0UntriggerThreshold)
        -> MulticastSubject HarpLickometerCommands

    GroupWorkflow Thermistor/Pressure
        SubscribeSubject HarpSniffDetectorEvents
        -> AllenNeuralDynamics.SniffDetector.Parse(Register=AllenNeuralDynamics.SniffDetector.TimestampedRawVoltage) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSniffDetector)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #4
        #1, #4 -> SubscribeWhen
        -> PublishSubject ThermistorData

    GroupWorkflow Treadmill
        FloatProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject TreadmillFriction

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.SensorDataDispatchRate)
        -> BehaviorSubject TreadmillSamplingRate

        GroupWorkflow DetermineTreadmillScaling
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output) => #2
            -> MemberSelector(Selector=WheelDiameter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Perimeter => #4
              Expression: it * Math.Pi
            #2 -> MemberSelector(Selector=PulsesPerRevolution) => #5
            #4, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform CentimetersPerTick => #7
              Expression: Item1 / Item2
            #2 -> MemberSelector(Selector=InvertDirection) => #8
            #7, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? -1.0 * Item1 : Item1
            -> WorkflowOutput
        -> AsyncSubject TreadmillScaling

        SubscribeSubject HarpTreadmillEvents
        -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedSensorData) => #9
        -> Skip(Count=1) => #10
        #10, #9 -> Zip => #11
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateDisplacement => #12
          Expression: single(Item1.Value.Encoder - Item2.Value.Encoder)
        SubscribeSubject TreadmillScaling
        -> PropertyMapping(RangeMax) => #14
        #12, #14 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=-0.005752427954571154, RescaleType=Linear) => #15
        #15, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform CalculateInstantSpeed => #17
          Expression:
            new(
            Item1 as Displacement,
            (Item1 / single(Item2.Item1.Seconds - Item2.Item2.Seconds)) as InstantVelocity
            )
        #11 -> MemberSelector(Selector=Item1.Seconds) => #18
        #17, #18 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject EncoderSample

        SubscribeSubject TreadmillFriction
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Clamp)
        -> DistinctUntilChanged => #24
        GroupWorkflow GetInterpolator
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpTreadmill.Calibration)
            -> MemberSelector(Selector=Output)
            -> MemberSelector(Selector=BrakeLookupCalibration)
            -> Merge => #4
            -> Index(Operand=IntProperty(Value=0)) => #5
            #4 -> Index(Operand=IntProperty(Value=1)) => #6
            #5, #6 -> Zip
            -> ToList
            -> Bonsai.Numerics.Interpolation.CreateLinear
            -> WorkflowOutput
        -> PropertyMapping(Interpolation) => #26
        #24, #26 -> Bonsai.Numerics.Interpolation.Interpolate
        -> AllenNeuralDynamics.Treadmill.Format(MessageType=Write, Register=AllenNeuralDynamics.Treadmill.BrakeCurrentSetPoint)
        -> CreateObservable SendMessage
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject HarpMessage

            SubscribeSubject HarpTreadmillEvents
            -> AllenNeuralDynamics.Treadmill.Parse(Register=AllenNeuralDynamics.Treadmill.TimestampedTorque) => #4
            SubscribeSubject HarpMessage => #5
            ExternalizedMapping(DueTime(DisplayName=RetryTimeout))
            -> Bonsai.Shaders.Timer(DueTime=PT0.1S, Period=PT0.1S) => #7
            SubscribeSubject HarpMessage => #8
            #7, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #10
            #5, #10 -> Merge
            -> MulticastSubject HarpTreadmillCommands => #12
            #4, #12 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

Disable GroupWorkflow DebugTools
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=InterPatchSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label) => #8
        -> Equal(Operand=StringProperty(Value=GapSite)) => #9
        #8 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #10
        #9, #10 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> MemberSelector(Selector=Label)
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #17
          Expression: it ? 255 : 0
        #6, #13, #17 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #19
        #2, #19 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=255
          ColorB=0
          ColorA=1
        -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>)
    -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.Treadmill.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.Treadmill.CreateBrakeCurrentSetPointPayload(BrakeCurrentSetPoint=0))
    -> Take(Count=1)
    -> MulticastSubject HarpTreadmillCommands
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
